<?xml version="1.0" encoding="UTF-8"?>
<batch>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.mztabimport.MzTabImportModule">
        <parameter name="mzTab files">
            <file>REPLACEME</file>
        </parameter>
        <parameter name="Import raw data files?">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.alignment.join.JoinAlignerModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Peak list name">Aligned peak list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">5.0</parameter>
        <parameter name="Retention time tolerance" type="absolute">0.55</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
            <parameter name="Isotope m/z tolerance">
                <absolutetolerance>0.00035</absolutetolerance>
                <ppmtolerance>2.0</ppmtolerance>
            </parameter>
            <parameter name="Minimum absolute intensity"/>
            <parameter name="Minimum score"/>
        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.mztabexport.MzTabExportModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">/OUTPUTPATH/merged.mzTab</parameter>
        <parameter name="Include all peaks">true</parameter>
    </batchstep>
</batch>
